PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Test1
  keyboardBackend = ioHub
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Routines
  Routine Stimuli
    ImageComponent StimuliImage
      image = SPINlogo.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 256
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    TextComponent StimuliText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $StimuliTextRandom
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  Routine ReadyCheck
    ButtonComponent ReadyCheckButton
      bold = True
      fillColor = 0.3569, 1.0000, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.4, 0.2)
      startVal [time (s)] = 0
      text = Ready
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    TextComponent ReadyCheckText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Press the Ready button once you are ready to start the trials
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  Routine BaselineSelfReport
    TextComponent BaselineSelfReportText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How are you feeling today?
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    SliderComponent BaselineSlider
      forceEndRoutine = False
      granularity = 0
      labels = ("Calm","Agitated")
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent BaselineDone
      bold = True
      fillColor = 0.3569, 1.0000, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = $BaselineSlider.getRating() != None
      text = Done
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  Routine Task
    TextComponent TaskText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Complete The Task
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    ButtonComponent TaskReady
      bold = True
      fillColor = 0.3569, 1.0000, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.4, 0.2)
      startVal [time (s)] = 0
      text = Ready
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  Routine PostTaskSelfReport
    ButtonComponent SelfReportDone
      bold = True
      fillColor = 0.3569, 1.0000, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = $BaselineSlider.getRating() != None
      text = Done
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    SliderComponent SelfReportSlider
      forceEndRoutine = False
      granularity = 0
      labels = ("Calm","Agitated")
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent SelfReportText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How are you feeling?
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  Routine Neutralize
    PolygonComponent polygon
      fillColor = white
      lineWidth = 0.5
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine End
    TextComponent EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End Of Experiment
Flow
  Routine BaselineSelfReport
  Routine ReadyCheck
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = PsychoPyTest.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'StimuliTextRandom': 'Stimuli Text 1', 'Example': 1},
      {'StimuliTextRandom': 'Stimuli Text 2', 'Example': 2},
      {'StimuliTextRandom': 'Stimuli Text 3', 'Example': 3}]
    Routine Stimuli
    Routine Task
    Routine PostTaskSelfReport
    Routine Neutralize
  LoopTerminator Trials
  Routine Task
  Routine End
